 ##### ===========================================================================================
##
##    MACRO FILE - OPTICAL EXAMPLE - ATLANTA IEEE 2017
##
##### ===========================================================================================


## =====================================================
## VISUALISATION & VERBOSE
## =====================================================

/vis/disable
#/control/execute mac/visu.mac
#/vis/scene/endOfEventAction accumulate 200
# /control/execute mac/verbose.mac
# /vis/viewer/set/viewpointThetaPhi 90 0
## =====================================================
## GEOMETRY
## =====================================================

/gate/geometry/setMaterialDatabase GateMaterials.db

##
## World
##
/gate/world/geometry/setXLength 1 m
/gate/world/geometry/setYLength 1 m
/gate/world/geometry/setZLength 1 m
/gate/world/setMaterial Air

## =====================================================
## Set up geometry, physics and output
## =====================================================
#/control/execute mac/FieldSizeStudy/CommonMacs/HeadGeometry.mac
#/control/execute mac/FieldSizeStudy/CommonMacs/SensorGeometry.mac
#/control/execute mac/FieldSizeStudy/CommonMacs/Jaws10x10.mac

#/control/execute mac/FieldSizeStudy/CommonMacs/KillPlane.mac
/control/execute mac/FieldSizeStudy/CommonMacs/Absorber5-pb.mac

/control/execute mac/FieldSizeStudy/CommonMacs/PhysicsCuts-abs.mac
/control/execute mac/FieldSizeStudy/CommonMacs/OutputManagement-abs5-pb.mac

#/control/execute mac/FieldSizeStudy/CommonMacs/KillPosElecActor.mac

## =====================================================
## INITIALISATION
## =====================================================

/gate/run/initialize

## =====================================================
## BEAMS
## =====================================================

#/gate/source/addSource mybeam gps
/gate/source/addSource  mybeam  phaseSpace
/gate/source/mybeam/addPhaseSpaceFile  /storage/yw18581/phase_space_planes/Test10x10-PSA_4040_only_gammas.root 
#/gate/source/mybeam/gps/particle gamma

#/control/execute mac/FieldSizeStudy/CommonMacs/BeamDirection.mac

#/gate/source/mybeam/gps/ang/type iso

#/control/execute mac/FieldSizeStudy/CommonMacs/BeamOpening10x10.mac

#/control/execute mac/FieldSizeStudy/CommonMacs/MohanBeamEnergySpectrum.mac

## =====================================================
## START BEAMS
## =====================================================
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed 123456
/gate/application/noGlobalOutput

/gate/application/setTotalNumberOfPrimaries 10000000
/gate/application/start
